//Bspline Transformation - T.Pisano, Wang Lab 2016.

//ImageTypes
(FixedImageDimension 3)
(MovingImageDimension 3)
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator") //(Interpolator "RayCastInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator") //(ResampleInterpolator "FinalRayCastInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "true" ) //False=ROI, True=PixelValid
(NumberOfResolutions 8)
(FinalGridSpacingInVoxels 25.000000 25.000000 25.000000) //might need to make this 10.00 10.00 10.00 if the 10um atlas works
(HowToCombineTransforms "Compose")
(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
//(ResultImagePixelType "float") //  (unsigned) char, (unsigned) short, float, double, etc.
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")
(WriteDiffusionFiles "true")

// Option supported in elastix 4.1:
(UseFastAndLowMemoryVersion "true")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 15000) //Works at 10k

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1)
(UseRandomSampleRegion "true")
(SampleRegionSize 50.0 50.0 50.0)
(NumberOfSpatialSamples 7500 ) //was 10k, a bit too much for smaller samples
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)
(RequiredRatioOfValidSamples 0.05)
(UseDirectionCosines "false")

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3) 

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(ResultImageFormat "tif")

//Currently not being used:
//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 10000.0 )

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 100.0 )

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.6 )



